OpenViBE-Scenario
0xf36a1567 = http://openvibe.inria.fr/openvibe-p300-speller/
Comment
  Python UI box frequency = 16Hz
  The script produces a new target every 200 calls (12.5s)
Comment
  The use of these P300 examples are described in

  http://openvibe.inria.fr/openvibe-p300-speller/

  with important notes about timing in

  http://openvibe.inria.fr/using-the-p300-scenarios-inside-openvibe/
Comment
  Note that by default this scenario reads from a file
  included in the OpenViBE distribution. To use live signal
  from a headset, replace the connections from
  Generic Stream Reader to connections from
  Acquisition Client.
Comment
  This box will write the recorded file under
  the directory where the scenario was opened
  from (token ${Player_ScenarioDirectory})

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/signals/bci-p300-speller.ov
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Generic stream reader => #2
  Filename = ${Player_ScenarioDirectory}/signals/recorded_training_signal.ov
Input stream 1=#2.Output stream 2, Input stream 2=#0.Output stream 3, Input stream 3=#0.Output stream 4 -> Identity => #3
#3.Output stream 1 -> Channel Selector "O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8"
  Channel List = O1;O2;P7;P8;F3;F4;FC5;FC6;AF3;AF4;F7;F8
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Signal Decimation => #6
  Decimation factor = 4
Input stream 1=#6, Input stream 2=#3.Output stream 2 -> Identity => #7
Data=#7.Output stream 1, Stimulations=#7.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#0.Output stream 3, Input stream 4=#0.Output stream 4 -> Identity => #9
Input stream 1=#9.Output stream 1, Input stream 2=#9.Output stream 2, Input stream 3=#9.Output stream 3, Input stream 4=#9.Output stream 4 -> 0xc67a01dc Generic stream writer
  Filename = C:/Users/Jun Shern/Desktop/PEARS/signals/train_record.ov
  Use compression = false
